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System:Configuration string StartupShellScript= C:\Users\heting\Documents\bci2000\batch\GripForceTask_GripForceSource.bat // Shell script that called "Startup system" (inputfile)(readonly)(noedit)
Source:Signal%20Properties int SourceCh= 1 // number of digitized and stored channels (allow_override)
Source:Signal%20Properties int SampleBlockSize= 32 // number of samples transmitted at a time (allow_override)
Source:Signal%20Properties int SampleBlockDuration= auto // duration of a sample block (set SampleBlockSize to auto)
Source:Signal%20Properties int SamplingRate= 256Hz // sampling rate (allow_override)
Source:Signal%20Properties list ChannelNames= 1 auto // list of channel names (allow_override)
Source:Signal%20Properties list SourceChOffset= 1 auto // Offset for channels in A/D units (allow_override)
Source:Signal%20Properties list SourceChGain= 1 auto // gain for each channel (physical units per raw A/D unit) (allow_override)
Storage:Data%20Location string DataDirectory= ../data ../data % % // path to top level data directory (directory)
Storage:Session string SubjectName= Name Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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SignalSharing:Processing%20Stages string ShareDataIOFilter= % // Share DataIOFilter output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareDataIOFilterStates= 0 // List of DataIOFilter state variables to send within a separate signal object
Source:GripForce int InputMode= 0 0 0 1 // input source: 0: mouse displacement, 1: external sensor (Intan) (enumeration)
Source:GripForce int MouseAxis= 0 0 0 1 // mouse axis: 0: Y (vertical), 1: X (horizontal) (enumeration)
Source:GripForce float Gain= 1.0 1.0 0.0 % // displacement -> force scaling factor
Source:GripForce int TargetChannel= 1 1 1 % // channel the force is written to (1-based); other channels output 0
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= % // time of beginning of data storage
Storage:FileSplitting string FileSplittingCondition= % // when to split files, e.g. "1:25:00" or "1.5GB"
Storage:Output%20Files string PrimaryOutputChannels= * // list of channels stored into the primary output file: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
Storage:Output%20Files matrix SecondaryOutputFiles= 0 { prefix name channels decimation } // specify prefixes and/or names (infixes) for secondary output files, with channel list and decimation
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes) (boolean)(allow_override)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (allow_override)(may be empty)
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SignalSharing:Processing%20Stages string ShareAlignmentFilter= % // Share AlignmentFilter output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareAlignmentFilterStates= 0 // List of AlignmentFilter state variables to send within a separate signal object
Source:Online%20Processing list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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SignalSharing:Processing%20Stages string ShareTransmissionFilter= % // Share TransmissionFilter output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareTransmissionFilterStates= 0 // List of TransmissionFilter state variables to send within a separate signal object
Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
Storage:RunManager string DataFileShm= /R30Ox6Mt9aEbA5FA // name of shared memory object holding data file name (readonly)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 GripForceSourceADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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SignalSharing:Processing%20Stages string ShareExpressionFilter= % // Share ExpressionFilter output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareExpressionFilterStates= 0 // List of ExpressionFilter state variables to send within a separate signal object
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain (noedit)(readonly)
Application:Application%20Window int WindowWidth= 1640 640 0 % // width of Application window
Application:Application%20Window int WindowHeight= 980 480 0 % // height of Application window
Application:Application%20Window int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window int WindowFullscreen= 0 0 0 1 // Application window fullscreen mode (boolean)
Application:Application%20Window string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)(allow_override)
Application:Application%20Window string WindowHideCursor= 1 0 0 1 // hide cursor when mouse is over Application window (boolean)
Application:Application%20Window matrix WindowInfo= 1 1 auto // Application window information (readonly)(noedit)
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Application:AudioPlayback int AudioPlaybackOn= auto 0 0 1 // switch audio playback on
Application:AudioPlayback float AudioPlaybackRate= auto // audio playback sampling rate
Application:AudioPlayback int AudioPlaybackChannels= auto // number of playback output channels
Application:AudioPlayback float AudioPlaybackBufferDuration= auto // duration of playback buffer
Visualize:Application%20Log int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing float PreFeedbackDuration= 1s 2s 0 % // duration of target display prior to feedback
Application:Sequencing float FeedbackDuration= 60s 3s 0 % // duration of feedback
Application:Sequencing float PostFeedbackDuration= 2s 1s 0 % // duration of result display after feedback
Application:Sequencing float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing int NumberOfTrials= 10 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets int NumberTargets= 1 1 1 4 // 目标数量（默认顶部单目标=1）
Application:Targets intlist TargetSequence= 1 1 % % // fixed sequence; always target 1
Application:Window int RenderingQuality= 1 0 0 1 // rendering quality: 0: low(2D), 1: high(3D) (enumeration)
Application:Sequencing float MaxFeedbackDuration= 60s % 0 % // 每个trial最长反馈时间，超时算失败
Application:GripForce int GripForceChannel= 0 0 0 % // 握力信号通道号(1-based)，0=使用第1个ControlSignal通道
Application:GripForce float GripForceMin= 0.0 0.0 % % // 传感器最小值（对应球最低位置，单位与信号单位一致）
Application:GripForce float GripForceMax= 1 1.0 % % // 传感器最大值（对应球最高位置）
Application:GripForce float GripForceSmoothing= 0.9 0.8 0.0 0.99 // 握力低通平滑系数(0=无平滑, 0.99=极平滑)
Application:GripForce float MVCThreshold= 0.1 0.3 0.0 1.0 // 击中目标所需的最小握力（占归一化范围的比例）
Application:Marker int EnableMarker= 1 0 0 1 // 小球出现时输出NI6501硬件脉冲(0=关,1=开) (boolean)
Application:Marker int MarkerPulseMs= 200 200 1 % // 打标脉冲宽度(ms)
Application:GripPhysics float LiftGain= 1.0 1.0 0.0 % // 握力→上升力的比值（越大越容易把球托起）
Application:GripPhysics float GravityForce= 0.3 0.3 0.0 % // 恒定向下力（重力）大小（越大球下落越快）
Application:GripPhysics float CursorDamping= 0.85 0.85 0.0 0.99 // 速度阻尼(0~1)，越大惯性越强、越接近0越'黏'
Application:Paradigm int ParadigmType= 0 0 0 2 // 范式类型: 0: VoluntaryGrip(自主握力), 1: CuedGrip(提示握力), 2: TrackingGrip(追踪握力) (enumeration)
Application:Targets matrix Targets= 1 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 50 80 50 20 20 20 // 目标位置与大小（百分比坐标，单个顶部目标）
Application:Targets int TargetColor= 0x808080 // 目标颜色 (color)
Application:Targets string TargetTexture= % // 目标纹理路径 (inputfile)
Application:Cursor float CursorWidth= 10 10 1 30 // 光标（球）大小（占屏幕宽度百分比）
Application:Cursor int CursorColorFront= 0xff0000 // 光标前景色 (color)
Application:Cursor int CursorColorBack= 0xffff00 // 光标背景色 (color)
Application:Cursor string CursorTexture= images/marble.bmp // 光标纹理路径 (inputfile)
Application:Cursor floatlist CursorPos= 3 50 50 50 // 光标（球）起始位置
Application:3DEnvironment floatlist CameraPos= 3 90 35 20 // 摄像机位置：俯视图五点钟方向，低三分之一高度
Application:3DEnvironment floatlist CameraAim= 3 50 62 50 // 摄像机朝向：从低位斜向上看运动范围
Application:3DEnvironment int CameraProjection= 2 0 0 2 // 投影类型: 0:平行 1:广角透视 2:窄角透视 (enumeration)
Application:3DEnvironment floatlist LightSourcePos= 3 65 85 45 // 光源位置
Application:3DEnvironment int LightSourceColor= 0x808080 // 光源颜色 (color)
Application:3DEnvironment int WorkspaceBoundaryColor= 0x303030 0 % % // 工作区边界颜色 (color)
Application:3DEnvironment floatlist WorkspaceBoundaryPos= 3 50 50 50 // 工作区中心位置
Application:3DEnvironment floatlist WorkspaceBoundarySize= 3 100 100 100 // 工作区尺寸
Application:3DEnvironment string WorkspaceBoundaryTexture= % // 工作区纹理为空=不显示网格 (inputfile)
SignalSharing:Processing%20Stages string ShareApplicationBase= % // Share ApplicationBase output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareApplicationBaseStates= 0 // List of ApplicationBase state variables to send within a separate signal object
Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
SignalSharing:Processing%20Stages string ShareKeystrokeFilter= % // Share KeystrokeFilter output at address ip:port
SignalSharing:Processing%20Stages stringlist ShareKeystrokeFilterStates= 0 // List of KeystrokeFilter state variables to send within a separate signal object
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System:Configuration matrix ApplicationFilterChain= 2 { Filter%20Name Position%20String } GripForceTask 3 KeystrokeFilter 3.1 // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 8927 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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